PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1stAttempt_delayDiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP" + str(reward_today) + " today" + "or" + " GBP " + str (future_reward) + "after" + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/urmil/OneDrive/Documents/discounting_conditons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 48, 'future_reward': 125, 'delay': 107},
      {'reward_today': 58, 'future_reward': 128, 'delay': 81},
      {'reward_today': 32, 'future_reward': 114, 'delay': 111},
      {'reward_today': 25, 'future_reward': 113, 'delay': 126},
      {'reward_today': 8, 'future_reward': 99, 'delay': 103},
      {'reward_today': 17, 'future_reward': 117, 'delay': 142},
      {'reward_today': 64, 'future_reward': 104, 'delay': 74},
      {'reward_today': 36, 'future_reward': 105, 'delay': 67},
      {'reward_today': 22, 'future_reward': 85, 'delay': 82},
      {'reward_today': 28, 'future_reward': 127, 'delay': 70},
      {'reward_today': 29, 'future_reward': 98, 'delay': 40},
      {'reward_today': 5, 'future_reward': 104, 'delay': 148},
      {'reward_today': 20, 'future_reward': 121, 'delay': 40},
      {'reward_today': 42, 'future_reward': 93, 'delay': 40},
      {'reward_today': 57, 'future_reward': 96, 'delay': 90},
      {'reward_today': 2, 'future_reward': 110, 'delay': 106},
      {'reward_today': 64, 'future_reward': 102, 'delay': 109},
      {'reward_today': 55, 'future_reward': 112, 'delay': 131},
      {'reward_today': 28, 'future_reward': 104, 'delay': 60},
      {'reward_today': 36, 'future_reward': 126, 'delay': 47}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
    Routine trial
  LoopTerminator trials
